PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    KeyboardComponent instructions_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_condition
    TextComponent show_condition_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $condition
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = csvs/noise_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'condition_1')]),
      OrderedDict([('condition', 'condition_2')]),
      OrderedDict([('condition', 'condition_3')]),
      OrderedDict([('condition', 'condition_4')])]
    Routine show_condition
  LoopTerminator trials
